# Generated by Configurator on Fri Oct 08 12:04:35 CDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM10,SerialManager,COM10
Device,Ti2-E,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,TransmissionLamp,NikonTi2,DiaLamp
Device,OrcaFlash2_8,HamamatsuHam,HamamatsuHam_DCAM
Device,FilterTurret2,NikonTi2,FilterTurret2
Device,Turret2Shutter,NikonTi2,Turret2Shutter
Device,OrcaFlash4v3,HamamatsuHam,HamamatsuHam_DCAM
Device,Turbo/XT600 Controller,XCiteXT600,Turbo/XT600 Controller
Device,LED1 Device,XCiteXT600,LED1 Device
Device,VarispecLCTF,VarispecLCTF,VarispecLCTF

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,115200
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,9600
Property,COM10,DTR,Disable
Property,COM10,DataBits,8
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Fast USB to Serial,Disable
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,Turbo/XT600 Controller,Port,COM5
Property,VarispecLCTF,Baud Rate,9600
Property,VarispecLCTF,Port,COM10

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E
Parent,XYStage,Ti2-E
Parent,Nosepiece,Ti2-E
Parent,CondenserTurret,Ti2-E
Parent,FilterTurret1,Ti2-E
Parent,Turret1Shutter,Ti2-E
Parent,LightPath,Ti2-E
Parent,PFS,Ti2-E
Parent,PFSOffset,Ti2-E
Parent,IntermediateMagnification,Ti2-E
Parent,TransmissionLamp,Ti2-E
Parent,FilterTurret2,Ti2-E
Parent,Turret2Shutter,Ti2-E

# Initialize
Property,Core,Initialize,1

# Delays
Delay,VarispecLCTF,50.0

# Focus directions
FocusDirection,ZDrive,1
FocusDirection,PFSOffset,1

# Roles
Property,Core,Camera,OrcaFlash4v3
Property,Core,Shutter,Turret1Shutter
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-Plan Fluor 4x
Label,Nosepiece,3,4-
Label,Nosepiece,2,3-
Label,Nosepiece,1,2-Apo TIRF 100x Oil
Label,Nosepiece,0,1-Plan Apo Lmbd 60x Oil
# CondenserTurret
Label,CondenserTurret,6,7-
Label,CondenserTurret,5,6-
Label,CondenserTurret,4,5-
Label,CondenserTurret,3,4-
Label,CondenserTurret,2,3-Shutter
Label,CondenserTurret,1,2-ND
Label,CondenserTurret,0,1-OPEN
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-DAPI
Label,FilterTurret1,3,4-BF
Label,FilterTurret1,2,3-CY5
Label,FilterTurret1,1,2-dsRed RFP
Label,FilterTurret1,0,1-GFP
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE
# FilterTurret2
Label,FilterTurret2,5,6-Empty
Label,FilterTurret2,4,5-Empty
Label,FilterTurret2,3,4-Empty
Label,FilterTurret2,2,3-Empty
Label,FilterTurret2,1,2-Empty
Label,FilterTurret2,0,1-Empty

# Configuration presets
# Group: PFS
# Preset: On
ConfigGroup,PFS,On,PFS,FocusMaintenance,On

# Preset: Off
ConfigGroup,PFS,Off,PFS,FocusMaintenance,Off


# Group: Filter
# Preset: 4-BF
ConfigGroup,Filter,4-BF,FilterTurret1,Label,4-BF

# Preset: 1-GFP
ConfigGroup,Filter,1-GFP,FilterTurret1,Label,1-GFP

# Preset: 5-DAPI
ConfigGroup,Filter,5-DAPI,FilterTurret1,Label,5-DAPI

# Preset: 3-CY5
ConfigGroup,Filter,3-CY5,FilterTurret1,Label,3-CY5

# Preset: 2-dsRed RFP
ConfigGroup,Filter,2-dsRed RFP,FilterTurret1,Label,2-dsRed RFP

# Preset: 6-Empty
ConfigGroup,Filter,6-Empty,FilterTurret1,Label,6-Empty


# Group: Camera
# Preset: Left
ConfigGroup,Camera,Left,Core,Camera,OrcaFlash4v3
ConfigGroup,Camera,Left,LightPath,Label,4-L100

# Preset: Right
ConfigGroup,Camera,Right,Core,Camera,OrcaFlash2_8
ConfigGroup,Camera,Right,LightPath,Label,2-R100


# Group: wavelength
# Preset: NewPreset
ConfigGroup,wavelength,NewPreset,VarispecLCTF,Wavelength,550.0000


# Group: ImgConfig
# Preset: Standard
ConfigGroup,ImgConfig,Standard,LightPath,Label,2-R100
ConfigGroup,ImgConfig,Standard,Core,Camera,OrcaFlash2_8

# Preset: Spectral
ConfigGroup,ImgConfig,Spectral,LightPath,Label,4-L100
ConfigGroup,ImgConfig,Spectral,Core,Camera,OrcaFlash4v3


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,OrcaFlash4v3,Binning,2x2
ConfigGroup,System,Startup,Turbo/XT600 Controller,X.11 Front Panel (1=Lock 0=Unlock),1
ConfigGroup,System,Startup,Core,Shutter,Turret1Shutter
ConfigGroup,System,Startup,LED1 Device,L.14 On/Off State (1=On 0=Off),1
ConfigGroup,System,Startup,FilterTurret1,Label,4-BF

# Preset: Shutdown
ConfigGroup,System,Shutdown,OrcaFlash4v3,Binning,2x2
ConfigGroup,System,Shutdown,Turbo/XT600 Controller,X.11 Front Panel (1=Lock 0=Unlock),0
ConfigGroup,System,Shutdown,Core,Shutter,Turret1Shutter
ConfigGroup,System,Shutdown,LED1 Device,L.14 On/Off State (1=On 0=Off),1
ConfigGroup,System,Shutdown,FilterTurret1,Label,2-dsRed RFP


# Group: LED
# Preset: NewPreset
ConfigGroup,LED,NewPreset,LED1 Device,L.15 Intensity (0.0 or 5.0 - 100.0)%,5.0000



# PixelSize settings
# Resolution preset: StandardCam100x
ConfigPixelSize,StandardCam100x,Nosepiece,Label,2-Apo TIRF 100x Oil
ConfigPixelSize,StandardCam100x,Core,Camera,OrcaFlash2_8
PixelSize_um,StandardCam100x,0.0515
PixelSizeAffine,StandardCam100x,-3.890163826592851E-4,-0.051455159655668846,0.0,-0.051519940820030294,3.33595414868219E-4,0.0
# Resolution preset: Spectral100x
ConfigPixelSize,Spectral100x,Nosepiece,Label,2-Apo TIRF 100x Oil
ConfigPixelSize,Spectral100x,Core,Camera,OrcaFlash4v3
PixelSize_um,Spectral100x,0.0649
PixelSizeAffine,Spectral100x,-6.904141847296916E-5,-0.06486995215873669,0.0,-0.06489844768838995,-6.316740972389272E-6,0.0

