# Generated by Configurator on Mon Dec 13 11:59:01 PST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,SpectralCam,HamamatsuHam,HamamatsuHam_DCAM
Device,Ti2-E,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,FilterTurret2,NikonTi2,FilterTurret2
Device,Turret2Shutter,NikonTi2,Turret2Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,DiaLamp,NikonTi2,DiaLamp
Device,VarispecLCTF,VarispecLCTF,VarispecLCTF

# Pre-init settings for devices
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,VarispecLCTF,Baud Rate,9600
Property,VarispecLCTF,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2-E
Parent,XYStage,Ti2-E
Parent,Nosepiece,Ti2-E
Parent,CondenserTurret,Ti2-E
Parent,FilterTurret1,Ti2-E
Parent,Turret1Shutter,Ti2-E
Parent,FilterTurret2,Ti2-E
Parent,Turret2Shutter,Ti2-E
Parent,LightPath,Ti2-E
Parent,PFS,Ti2-E
Parent,PFSOffset,Ti2-E
Parent,IntermediateMagnification,Ti2-E
Parent,DiaLamp,Ti2-E

# Initialize
Property,Core,Initialize,1

# Delays
Delay,VarispecLCTF,50.0

# Focus directions
FocusDirection,ZDrive,0
FocusDirection,PFSOffset,0

# Roles
Property,Core,Camera,SpectralCam
Property,Core,Shutter,Turret1Shutter
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-
Label,Nosepiece,2,3-
Label,Nosepiece,1,2-Apo TIRF 100x Oil
Label,Nosepiece,0,1-Apo LmbdS 60x Oil
# CondenserTurret
Label,CondenserTurret,6,7-
Label,CondenserTurret,5,6-
Label,CondenserTurret,4,5-
Label,CondenserTurret,3,4-
Label,CondenserTurret,2,3-
Label,CondenserTurret,1,2-
Label,CondenserTurret,0,1-
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-Cy5
Label,FilterTurret1,3,4-49005 - ETCy5
Label,FilterTurret1,2,3-GFP-B
Label,FilterTurret1,1,2-DAPI
Label,FilterTurret1,0,1-BF
# FilterTurret2
Label,FilterTurret2,5,6-Empty
Label,FilterTurret2,4,5-Empty
Label,FilterTurret2,3,4-Empty
Label,FilterTurret2,2,3-Empty
Label,FilterTurret2,1,2-Empty
Label,FilterTurret2,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,SpectralCam,Binning,2x2
ConfigGroup,System,Startup,VarispecLCTF,Wavelength,550.0000



# PixelSize settings

