# Generated by Configurator on Tue Dec 01 15:11:19 CST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM4,SerialManager,COM4
Device,Hamamatsu,HamamatsuHam,HamamatsuHam_DCAM
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte
Device,VarispecLCTF,VarispecLCTF,VarispecLCTF
Device,TIFilterBlock2,NikonTI,TIFilterBlock2
Device,TITIRF,NikonTI,TITIRF

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,XCite-Exacte,Port,COM5
Property,VarispecLCTF,Baud Rate,9600
Property,VarispecLCTF,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,TIFilterBlock2,TIScope
Parent,TITIRF,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,100.0
Delay,TIFilterBlock1,100.0
Delay,TILightPath,100.0
Delay,XCite-Exacte,10.0
Delay,VarispecLCTF,50.0
Delay,TIFilterBlock2,100.0

# Focus directions

# Roles
Property,Core,Camera,Hamamatsu
Property,Core,Shutter,XCite-Exacte
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Apo TIRF 100x NA 1.49 Oil
Label,TINosePiece,4,5-S Fluor 40x NA 1.30 Oil
Label,TINosePiece,3,4-Plan Apo VC 20x NA 0.75 Dry
Label,TINosePiece,2,3-Plan Fluor 60x NA 1.25 Oil
Label,TINosePiece,1,2-Plan Fluor 4x NA 0.13 Dry
Label,TINosePiece,0,1-Plan Apo 60x NA 1.40 Oil
# TIFilterBlock1
Label,TIFilterBlock1,5,6-40X P
Label,TIFilterBlock1,4,5-Cy5
Label,TIFilterBlock1,3,4-Cy3
Label,TIFilterBlock1,2,3-FITC
Label,TIFilterBlock1,1,2-DAPI
Label,TIFilterBlock1,0,1-BF
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# TIFilterBlock2
Label,TIFilterBlock2,5,6------
Label,TIFilterBlock2,4,5-Cy5
Label,TIFilterBlock2,3,4-Cy3
Label,TIFilterBlock2,2,3-FITC
Label,TIFilterBlock2,1,2-DAPI
Label,TIFilterBlock2,0,1-BF

# Configuration presets
# Group: Filter
# Preset: 4-Cy3
ConfigGroup,Filter,4-Cy3,TIFilterBlock1,Label,4-Cy3

# Preset: 5-Cy5
ConfigGroup,Filter,5-Cy5,TIFilterBlock1,Label,5-Cy5

# Preset: 3-FITC
ConfigGroup,Filter,3-FITC,TIFilterBlock1,Label,3-FITC

# Preset: 6-40X P
ConfigGroup,Filter,6-40X P,TIFilterBlock1,Label,6-40X P

# Preset: 2-DAPI
ConfigGroup,Filter,2-DAPI,TIFilterBlock1,Label,2-DAPI

# Preset: 1-BF
ConfigGroup,Filter,1-BF,TIFilterBlock1,Label,1-BF


# Group: Objective
# Preset: 1-Plan Apo 60x NA 1.40 Oil
ConfigGroup,Objective,1-Plan Apo 60x NA 1.40 Oil,TINosePiece,Label,1-Plan Apo 60x NA 1.40 Oil

# Preset: 4-Plan Apo VC 20x NA 0.75 Dry
ConfigGroup,Objective,4-Plan Apo VC 20x NA 0.75 Dry,TINosePiece,Label,4-Plan Apo VC 20x NA 0.75 Dry

# Preset: 2-Plan Fluor 4x NA 0.13 Dry
ConfigGroup,Objective,2-Plan Fluor 4x NA 0.13 Dry,TINosePiece,Label,2-Plan Fluor 4x NA 0.13 Dry

# Preset: 6-Apo TIRF 100x NA 1.49 Oil
ConfigGroup,Objective,6-Apo TIRF 100x NA 1.49 Oil,TINosePiece,Label,6-Apo TIRF 100x NA 1.49 Oil

# Preset: 3-Plan Fluor 60x NA 1.25 Oil
ConfigGroup,Objective,3-Plan Fluor 60x NA 1.25 Oil,TINosePiece,Label,3-Plan Fluor 60x NA 1.25 Oil

# Preset: 5-S Fluor 40x NA 1.30 Oil
ConfigGroup,Objective,5-S Fluor 40x NA 1.30 Oil,TINosePiece,Label,5-S Fluor 40x NA 1.30 Oil


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Hamamatsu,Binning,2x2
ConfigGroup,System,Startup,XCite-Exacte,Front-Panel-Lock,True
ConfigGroup,System,Startup,TILightPath,Label,3-Right100
ConfigGroup,System,Startup,TIXYDrive,SpeedX,6
ConfigGroup,System,Startup,TIXYDrive,SpeedY,6
ConfigGroup,System,Startup,Hamamatsu,TransposeXY,1
ConfigGroup,System,Startup,TIXYDrive,TransposeMirrorX,1
ConfigGroup,System,Startup,VarispecLCTF,Device Delay (ms.),50.0000
ConfigGroup,System,Startup,TIFilterBlock2,Label,1-BF
ConfigGroup,System,Startup,TITIRF,Mirror,Out
ConfigGroup,System,Startup,Hamamatsu,TRIGGER SOURCE,SOFTWARE
ConfigGroup,System,Startup,VarispecLCTF,Wavelength,550.0000
ConfigGroup,System,Startup,XCite-Exacte,Lamp-Intensity,100


# Group: ImagingConfig
# Preset: PWS
ConfigGroup,ImagingConfig,PWS,TILightPath,Label,3-Right100
ConfigGroup,ImagingConfig,PWS,Core,Camera,Hamamatsu


# Group: wv
# Preset: NewPreset
ConfigGroup,wv,NewPreset,VarispecLCTF,Wavelength,500.0000


# Group: led
# Preset: NewPreset
ConfigGroup,led,NewPreset,XCite-Exacte,Lamp-Intensity,10


# Group: Laser Mirror
# Preset: In
ConfigGroup,Laser Mirror,In,TITIRF,Mirror,In

# Preset: Out
ConfigGroup,Laser Mirror,Out,TITIRF,Mirror,Out



# PixelSize settings
# Resolution preset: 100X-Hamamatsu
ConfigPixelSize,100X-Hamamatsu,Core,Camera,Hamamatsu
PixelSize_um,100X-Hamamatsu,0.065
PixelSizeAffine,100X-Hamamatsu,0.065,0.0,0.0,0.0,0.065,0.0

